PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'trials_per_condition': '90', 'pursuit_or_saccade': '0 = none, 1 = pursuit, 2 = saccade', 'practice_version': '0', 'break_every_n_trials': '30', 'pupil_on': '0'}
  Full-screen window = True
  Monitor = asus
  Screen = 2
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = testDotsStepRampPilot
  logging level = debug
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Routines
  Routine trial
    TextComponent break_text
      letterHeight = 1
      startVal [condition] = $trials.thisN % trialsPerBreak == 0 and trials.thisN != 0 and practice == 0
      stopVal [condition] = $('space' in getKeys(keyList=["space"]))
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      text:
        Please take a break.
        Rest your eyes.
        Get up and stretch.
        Press the spacebar when you’re done.
    TextComponent postbreak_text
      letterHeight = 1
      startVal [condition] = $break_text.status == FINISHED
      stopVal [duration (s)] = 3
      text = Get Ready!
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    CodeComponent pretrial_sleep
      Code Type = Auto->JS
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      Begin Routine:
        pretrial_sleep_finished = 0
      Each Frame:
        if pretrial_sleep_finished == 0 \
            and break_text.status != STARTED \
            and postbreak_text.status != STARTED:
            clock.wait(1) # in sec
            pretrial_sleep_finished = 1;
    PolygonComponent fixation1
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      opacity = 0
      shape = cross
      size = (.8, .8)
      startVal [condition] = $pretrial_sleep_finished == 1
      stopVal [duration (s)] = 0.5
      units = deg
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    DotsComponent dots_stimulus
      coherence = 0.8
      dir = 0.0
      disabled = True
      dotLife = 50
      dotSize = $deg2pix(.17, win.monitor)
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = [20,20]
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [condition] = $fixation1.status==FINISHED
      stopVal [duration (s)] = .300
      units = deg
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    PolygonComponent blackout
      disabled = True
      fillColor = Black
      lineColor = $[-1,-1,-1]
      lineWidth = 0
      nVertices = 100
      shape = regular polygon...
      size = (4, 4)
      startVal [condition] = $dots_stimulus.status == STARTED
      stopVal [condition] = $dots_stimulus.status == FINISHED
      units = deg
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    PolygonComponent red_dot
      fillColor = Red
      lineWidth = 0
      nVertices = 100
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $fixation1.status == STARTED
      stopVal [condition] = $fixation2.status == FINISHED
      units = deg
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    PolygonComponent fixation2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      opacity = 0
      shape = cross
      size = (0.1,0.1)
      startVal [condition] = $fixation1.status == FINISHED
      stopVal [duration (s)] = 0.5
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    CodeComponent sacadde_pursuit_positions
      Code Type = Auto->JS
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      Each Frame:
        if fixation2.status == FINISHED and pursuit_or_saccade_dot.status!=FINISHED:
            pursuitSpeed = 10;
            stepRampTimeBackToCenter = (1.8/10);
            stepRampDist = pursuitSpeed * stepRampTimeBackToCenter;
            stopTime = 1;
            stopPosition = pursuitSpeed*stopTime;
            tStart = fixation2.tStop
            if pursuit_trial == 1:
                if pursuit_saccade_isLeft == 1:
                    position = [-(pursuitSpeed*(t-tStart)) + stepRampDist, 0]
                else:
                    position = [pursuitSpeed*(t-tStart) - stepRampDist, 0]
            elif saccade_trial == 1:
                if pursuit_saccade_isLeft == 0:
                    position = [-20,0] # deg
                else:
                    position = [20,0] # deg
    PolygonComponent pursuit_or_saccade_dot
      fillColor = Red
      lineColor = $[0,0,0]
      lineWidth = 0
      nVertices = 20
      pos [set every frame] = $position
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $fixation2.status == FINISHED and (pursuit_trial==1 or saccade_trial==1)
      stopVal [condition] = $position[0] > stopPosition or position[0] < -1*stopPosition
      units = deg
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    KeyboardComponent response
      allowedKeys = 'left','right'
      disabled = True
      forceEndRoutine = True
      startVal [condition] = $(pursuit_trial == 1 or saccade_trial == 1) and (pursuit_or_saccade_dot.status==FINISHED and response_trial == 1)
      stopVal [duration (s)] = 100
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    CodeComponent setup
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.tools.monitorunittools import deg2pix
        from psychopy.event import getKeys
      Begin Experiment:
        #print("dotsize set to:  ", dots_stimulus.dotSize)

        ## Type checking inputs
        typecheck_flag = 0
        if expInfo['trials_per_condition'].isdigit():
            print("trials_per_condition is a digit: ", expInfo['trials_per_condition'])
        else:
            print("Please input a digit for 'trials_per_condition.' \
            You entered: ", expInfo['trials_per_condition'])
            typecheck_flag = 1;

        if expInfo['pupil_on'] in ["0","1"]:
            print("pupil_on: ", expInfo['pupil_on'])
        else:
            print("Please input 1 or 0 for 'pupil_on'.  \
            You entered: ", expInfo['pupil_on'])
            typecheck_flag = 1;

        if expInfo['practice_version'] in ["0","1"]:
            print("practice_version: ", expInfo['practice_version'])
        else:
            print("Please input 1 or 0 for 'practice_version'.  \
            You entered: ", expInfo['practice_version'])
            typecheck_flag = 1;

        if expInfo['break_every_n_trials'].isdigit():
            print("break_every_n_trials is a digit: ", expInfo['break_every_n_trials'])
        else:
            print("Please input a digit for 'break_every_n_trials.' \
            You entered: ", expInfo['break_every_n_trials'])
            typecheck_flag = 1;

        if expInfo['pursuit_or_saccade'] in ["0","1","2"]:
            print("pursuit_or_saccade: ", expInfo['pursuit_or_saccade'])
        else:
            print("Please input 1 or 0 for 'practice_version'.  \
            You entered: ", expInfo['practice_version'])
            typecheck_flag = 1;

        if typecheck_flag == 1:
            print("SEE ABOVE ERROR. Quitting now.")
            core.quit()
      Begin Routine:
        # practice_text.text = "Coherence: " + str(dots_stimulus.coherence)
    CodeComponent set_coh_and_dir
      Code Type = Auto->JS
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      Begin Routine:
        #if practice == 0:
        #    dots_stimulus.coherence = coh_range_big.pop()
        #dots_stimulus.dir = (np.floor(np.random.rand() * 2) * 180)

        pursuit_saccade_isLeft = np.floor(np.random.rand() * 2)
        position = 0
        print("this trial: " , trials.thisN)
    CodeComponent output
      Code Type = Auto->JS
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      End Routine:
        #trials.addData('coh', dots_stimulus.coherence)
        #trials.addData('dir', dots_stimulus.dir)
        #print("response keys: ", response.keys)
        #if len(response.keys) != 1:
        #    responseNum = -1
        #if response.keys[0] in ['r', 'right']:
        #  responseNum = 0
        #elif response.keys[0] in ['l', 'left']:
        #  responseNum = 180
        #else:
        #  responseNum = -2
        #correct = -1
        #if responseNum == dots_stimulus.dir:
        #    correct = 1
        #else:
        #    correct = 0

        #congruent = -1
        #if (dots_stimulus.dir == 180 and pursuit_saccade_isLeft == 1)  \
        #        or (dots_stimulus.dir == 0 and pursuit_saccade_isLeft == 0):
        #    congruent = 1
        #else:
        #    congruent = 0
        #trials.addData('response', responseNum)
        #trials.addData('correct', correct)
        trials.addData('pursuit_saccade_isLeft',pursuit_saccade_isLeft)
        #trials.addData('congruent', congruent)
    CodeComponent parameters
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy

        # adjust these
        coh_range = [0.03, .06, .12, .24, .48]
        trials_per_condition = int(expInfo['trials_per_condition'])
        pupil_on = int(expInfo['pupil_on'])
        response_trial = 1 # fix this
        practice = int(expInfo['practice_version'])
        trialsPerBreak = int(expInfo['break_every_n_trials'])

        pursuit_trial = 0
        saccade_trial = 0
        if int(expInfo['pursuit_or_saccade']) == 1:
            pursuit_trial = 1
        elif int(expInfo['pursuit_or_saccade']) == 2:
            saccade_trial = 1

        print("coherence range: ", coh_range,
              "\ntrials per condition: ", trials_per_condition,
              "\npupil_on: ", pupil_on,
              "\npractice version: ", practice,
              "\ntrials per break: ", trialsPerBreak,
              "\npursuit_trial: ", pursuit_trial,
              "\nsaccade_trial: ", saccade_trial)

        # randomize coherences in blocks
        coh_range_big = []
        for x in range(0, trials_per_condition):
            x = coh_range.copy()
            numpy.random.shuffle(x)
            coh_range_big = coh_range_big + x
    CodeComponent pupil_network
      Code Type = Auto->JS
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      Begin Experiment:
        import zmq
        from msgpack import loads

        if pupil_on == 1:
            context = zmq.Context()
            # open a req port to talk to pupil
            addr = '198.137.18.59' #'127.0.0.1'  # remote ip or localhost
            req_port = "50020"  # same as in the pupil remote gui
            req = context.socket(zmq.REQ)
            req.connect("tcp://{}:{}".format(addr, req_port))
            # ask for the sub port
            req.send_string('SUB_PORT')
            sub_port = req.recv_string()

            # open a sub port to listen to pupil
            sub = context.socket(zmq.SUB)
            sub.connect("tcp://{}:{}".format(addr, sub_port))

            # set subscriptions to topics
            # recv just pupil/gaze/notifications
            sub.setsockopt_string(zmq.SUBSCRIBE, 'pupil.')
            # sub.setsockopt_string(zmq.SUBSCRIBE, 'gaze')
            # sub.setsockopt_string(zmq.SUBSCRIBE, 'notify.')
            # sub.setsockopt_string(zmq.SUBSCRIBE, 'logging.')
            # or everything:
            # sub.setsockopt_string(zmq.SUBSCRIBE, '')
      Begin Routine:
        psychopy_timestamp = win.getFutureFlipTime(clock=None)
        #topic, payload = sub.recv_multipart()
        #timestamp = loads(payload)[b'timestamp']

        if pupil_on:
            req.send_string('t')
            pupil_timestamp = req.recv_string()
            print("pupil timestamp", pupil_timestamp)
            print("psychopy timestamp", psychopy_timestamp)
        else:
            pupil_timestamp = -1;
      End Routine:
        trials.addData('pupil_timestamp', pupil_timestamp)
        trials.addData('psychopy_timestamp', psychopy_timestamp)
    CodeComponent to_do
      Code Type = Auto->JS
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      Begin Experiment:
        # test congruency output
        # response trial flag
        # saccade version
    CodeComponent practice
      Code Type = Auto->JS
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      Begin Experiment:
        stair_range = [.03, .06, .12, .24, .48, .80, .85, .90, .95, 1]
        stair_ind = len(stair_range) - 1
      Begin Routine:
        if practice == 1:
            dots_stimulus.coherence = stair_range[stair_ind]
      End Routine:
        if practice == 1:
            if correct == 0 and stair_range[stair_ind] > .50:
                if stair_ind < len(stair_range) - 1:
                    stair_ind += 1
                    print("going back up a level to: ", stair_range[stair_ind])
                else:
                    print("at max level. staying at: ", stair_range[stair_ind])
                    pass
            else:
                if stair_ind == 0:
                    trials.finished = 1
                else:
                    stair_ind -= 1
                    print("going down to: ", stair_range[stair_ind])
    CodeComponent endRoutine
      Code Type = Auto->JS
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      Each Frame:
        if pursuit_or_saccade_dot.status==FINISHED:
            win.flip()
            continueRoutine = False;
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
